# Generated by Configurator on Mon Aug 17 16:07:34 EDT 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM4,SerialManager,COM4
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,XYStage,Prior,XYStage
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,Spectra,LumencorSpectra,Spectra
Device,DHub,DemoCamera,DHub
Device,DShutter,DemoCamera,DShutter

# Pre-init settings for devices
Property,XYStage,Port,COM5
Property,Spectra,Port,COM4
Property,Spectra,SetLE_Type,Sola

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,15000.0000
Property,COM5,BaudRate,9600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM4,AnswerTimeout,1000.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,DShutter,DHub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,250.0
Delay,TIFilterBlock1,250.0

# Focus directions
FocusDirection,TIZDrive,1
FocusDirection,TIPFSOffset,1

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Spectra
Property,Core,Focus,TIPFSOffset
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo Lambda 10x NA 0.45 Dry
Label,TINosePiece,4,5-Unknown
Label,TINosePiece,3,4-Plan Apo VC 100x NA 1.40 Oil
Label,TINosePiece,2,3-Plan NEOFLUAR 40x NA 1.30 Oil
Label,TINosePiece,1,2-Plan Fluor 4x NA 0.13 Dry
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-Cy55
Label,TIFilterBlock1,4,5-GFP
Label,TIFilterBlock1,3,4-TxRed
Label,TIFilterBlock1,2,3-YFPHQ
Label,TIFilterBlock1,1,2-CFPHQ
Label,TIFilterBlock1,0,1-DAPI
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Camera
# Preset: Orca-Flash
ConfigGroup,Camera,Orca-Flash,TILightPath,Label,3-Right100
ConfigGroup,Camera,Orca-Flash,Core,Camera,HamamatsuHam_DCAM

# Preset: Andor iXon
ConfigGroup,Camera,Andor iXon,TILightPath,Label,2-Left100
ConfigGroup,Camera,Andor iXon,Core,Camera,Andor

# Group: Channel
# Preset: CFP_10X
ConfigGroup,Channel,CFP_10X,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,Channel,CFP_10X,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,CFP_10X,HamamatsuHam_DCAM,Exposure,200
ConfigGroup,Channel,CFP_10X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,CFP_10X,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,Channel,CFP_10X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],LOW
ConfigGroup,Channel,CFP_10X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],EXPOSURE
ConfigGroup,Channel,CFP_10X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,CFP_10X,TIFilterBlock1,Label,2-CFPHQ
ConfigGroup,Channel,CFP_10X,Spectra,White_Level,100
ConfigGroup,Channel,CFP_10X,Spectra,White_Enable,1
ConfigGroup,Channel,CFP_10X,Spectra,State,0
ConfigGroup,Channel,CFP_10X,Core,Camera,HamamatsuHam_DCAM
ConfigGroup,Channel,CFP_10X,Core,AutoShutter,1
ConfigGroup,Channel,CFP_10X,TILightPath,Label,3-Right100
ConfigGroup,Channel,CFP_10X,Core,Shutter,Spectra


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TINosePiece,Label,4-Plan Apo VC 100x NA 1.40 Oil
ConfigGroup,System,Startup,TIFilterBlock1,Label,3-YFPHQ
ConfigGroup,System,Startup,TIPFSStatus,State,Off
ConfigGroup,System,Startup,Spectra,State,0
ConfigGroup,System,Startup,Spectra,White_Enable,0
ConfigGroup,System,Startup,Spectra,White_Level,0
ConfigGroup,System,Startup,Core,Camera,HamamatsuHam_DCAM
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],LOW
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,Exposure,50
ConfigGroup,System,Startup,HamamatsuHam_DCAM,EXPOSURE FULL RANGE,ENABLE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL


# Group: Flash Trigger
# Preset: HIGH
ConfigGroup,Flash Trigger,HIGH,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],HIGH

# Preset: EXPOSURE
ConfigGroup,Flash Trigger,EXPOSURE,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE



# PixelSize settings
# Resolution preset: Flash_100X
ConfigPixelSize,Flash_100X,TINosePiece,Label,4-Plan Apo VC 100x NA 1.40 Oil
ConfigPixelSize,Flash_100X,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Flash_100X,0.0654

# Resolution preset: Flash_10X
ConfigPixelSize,Flash_10X,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
ConfigPixelSize,Flash_10X,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Flash_10X,0.6539

# Resolution preset: Flash_10X_lambda
ConfigPixelSize,Flash_10X_lambda,TINosePiece,Label,6-Plan Apo Lambda 10x NA 0.45 Dry
ConfigPixelSize,Flash_10X_lambda,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Flash_10X_lambda,0.6539

# Resolution preset: Flash_4X
ConfigPixelSize,Flash_4X,TINosePiece,Label,2-Plan Fluor 4x NA 0.13 Dry
ConfigPixelSize,Flash_4X,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Flash_4X,1.616 # +/- 0.0010