# Generated by Configurator on Thu Oct 30 17:05:00 EDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,COM4,SerialManager,COM4
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,SutterHub,SutterLambda2,SutterHub
Device,Shutter-A,SutterLambda2,Shutter-A
Device,TIScope,NikonTI,TIScope
Device,TIDiaLamp,NikonTI,TIDiaLamp
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,Spectra,LumencorSpectra,Spectra
Device,LudlController,Ludl,LudlController
Device,XYStage,Ludl,XYStage

# Pre-init settings for devices
Property,COM5,AnswerTimeout,200000.0000
Property,COM5,BaudRate,9600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,11.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,2
Property,COM5,Verbose,1
Property,COM6,AnswerTimeout,2000.0000
Property,COM6,BaudRate,128000
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,SutterHub,Port,COM6
Property,Spectra,Port,COM4
Property,Spectra,SetLE_Type,Spectra
Property,LudlController,Port,COM5

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Shutter-A,SutterHub
Parent,TIDiaLamp,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Shutter-A
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Plan Apo 100x NA 1.40 Oil
Label,TINosePiece,3,4-Plan Fluor 40x NA 0.75 Dry
Label,TINosePiece,2,3-S Plan Fluor 20x NA 0.45 Dry
Label,TINosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,TINosePiece,0,1-Plan Fluor 4x NA 0.13 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-Cy5
Label,TIFilterBlock1,4,5-TxRed
Label,TIFilterBlock1,3,4-YFPHQ
Label,TIFilterBlock1,2,3-FITC
Label,TIFilterBlock1,1,2-CFPHQ
Label,TIFilterBlock1,0,1-DAPI
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Channel
# Preset: rfp_100x
ConfigGroup,Channel,rfp_100x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,rfp_100x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,rfp_100x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Channel,rfp_100x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,rfp_100x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,rfp_100x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,rfp_100x,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,rfp_100x,Shutter-A,State,0
ConfigGroup,Channel,rfp_100x,TIDiaLamp,Intensity,0
ConfigGroup,Channel,rfp_100x,TIDiaLamp,State,0
ConfigGroup,Channel,rfp_100x,TINosePiece,Label,5-Plan Apo 100x NA 1.40 Oil
ConfigGroup,Channel,rfp_100x,TIFilterBlock1,Label,5-TxRed
ConfigGroup,Channel,rfp_100x,TILightPath,Label,3-Right100
ConfigGroup,Channel,rfp_100x,Spectra,State,1
ConfigGroup,Channel,rfp_100x,Spectra,White_Enable,1
ConfigGroup,Channel,rfp_100x,Spectra,White_Level,20
ConfigGroup,Channel,rfp_100x,Core,AutoShutter,1
ConfigGroup,Channel,rfp_100x,Core,Shutter,Spectra

# Preset: rfp_100x_200fps
ConfigGroup,Channel,rfp_100x_200fps,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,rfp_100x_200fps,HamamatsuHam_DCAM,Exposure,5
ConfigGroup,Channel,rfp_100x_200fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],HIGH
ConfigGroup,Channel,rfp_100x_200fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,rfp_100x_200fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,rfp_100x_200fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,rfp_100x_200fps,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,rfp_100x_200fps,Shutter-A,State,0
ConfigGroup,Channel,rfp_100x_200fps,TIDiaLamp,Intensity,0
ConfigGroup,Channel,rfp_100x_200fps,TIDiaLamp,State,0
ConfigGroup,Channel,rfp_100x_200fps,TINosePiece,Label,5-Plan Apo 100x NA 1.40 Oil
ConfigGroup,Channel,rfp_100x_200fps,TIFilterBlock1,Label,5-TxRed
ConfigGroup,Channel,rfp_100x_200fps,TILightPath,Label,3-Right100
ConfigGroup,Channel,rfp_100x_200fps,Spectra,State,1
ConfigGroup,Channel,rfp_100x_200fps,Spectra,White_Enable,1
ConfigGroup,Channel,rfp_100x_200fps,Spectra,White_Level,20
ConfigGroup,Channel,rfp_100x_200fps,Core,AutoShutter,1
ConfigGroup,Channel,rfp_100x_200fps,Core,Shutter,Spectra

# Preset: tr_100x
ConfigGroup,Channel,tr_100x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,tr_100x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,tr_100x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,Channel,tr_100x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Channel,tr_100x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,Channel,tr_100x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,tr_100x,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,tr_100x,Shutter-A,State,1
ConfigGroup,Channel,tr_100x,TIDiaLamp,Intensity,10
ConfigGroup,Channel,tr_100x,TIDiaLamp,State,1
ConfigGroup,Channel,tr_100x,TINosePiece,Label,5-Plan Apo 100x NA 1.40 Oil
ConfigGroup,Channel,tr_100x,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Channel,tr_100x,TILightPath,Label,3-Right100
ConfigGroup,Channel,tr_100x,Spectra,State,0
ConfigGroup,Channel,tr_100x,Spectra,White_Enable,0
ConfigGroup,Channel,tr_100x,Spectra,White_Level,100
ConfigGroup,Channel,tr_100x,Core,AutoShutter,1
ConfigGroup,Channel,tr_100x,Core,Shutter,Shutter-A

# Preset: rfp_10x
ConfigGroup,Channel,rfp_10x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,rfp_10x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,rfp_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Channel,rfp_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,rfp_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,rfp_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,rfp_10x,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,rfp_10x,Shutter-A,State,0
ConfigGroup,Channel,rfp_10x,TIDiaLamp,Intensity,0
ConfigGroup,Channel,rfp_10x,TIDiaLamp,State,0
ConfigGroup,Channel,rfp_10x,TINosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,Channel,rfp_10x,TIFilterBlock1,Label,5-TxRed
ConfigGroup,Channel,rfp_10x,TILightPath,Label,3-Right100
ConfigGroup,Channel,rfp_10x,Spectra,State,1
ConfigGroup,Channel,rfp_10x,Spectra,White_Enable,1
ConfigGroup,Channel,rfp_10x,Spectra,White_Level,100
ConfigGroup,Channel,rfp_10x,Core,AutoShutter,1
ConfigGroup,Channel,rfp_10x,Core,Shutter,Spectra

# Preset: gfp_4x
ConfigGroup,Channel,gfp_4x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,gfp_4x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,gfp_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Channel,gfp_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,gfp_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,gfp_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,gfp_4x,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,gfp_4x,Shutter-A,State,0
ConfigGroup,Channel,gfp_4x,TIDiaLamp,Intensity,0
ConfigGroup,Channel,gfp_4x,TIDiaLamp,State,0
ConfigGroup,Channel,gfp_4x,TINosePiece,Label,1-Plan Fluor 4x NA 0.13 Dry
ConfigGroup,Channel,gfp_4x,TIFilterBlock1,Label,3-FITC
ConfigGroup,Channel,gfp_4x,TILightPath,Label,3-Right100
ConfigGroup,Channel,gfp_4x,Spectra,State,1
ConfigGroup,Channel,gfp_4x,Spectra,White_Enable,1
ConfigGroup,Channel,gfp_4x,Spectra,White_Level,100
ConfigGroup,Channel,gfp_4x,Core,AutoShutter,1
ConfigGroup,Channel,gfp_4x,Core,Shutter,Spectra

# Preset: gfp_10x
ConfigGroup,Channel,gfp_10x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,gfp_10x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,gfp_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Channel,gfp_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,gfp_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,gfp_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,gfp_10x,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,gfp_10x,Shutter-A,State,0
ConfigGroup,Channel,gfp_10x,TIDiaLamp,Intensity,0
ConfigGroup,Channel,gfp_10x,TIDiaLamp,State,0
ConfigGroup,Channel,gfp_10x,TINosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,Channel,gfp_10x,TIFilterBlock1,Label,3-FITC
ConfigGroup,Channel,gfp_10x,TILightPath,Label,3-Right100
ConfigGroup,Channel,gfp_10x,Spectra,State,1
ConfigGroup,Channel,gfp_10x,Spectra,White_Enable,1
ConfigGroup,Channel,gfp_10x,Spectra,White_Level,100
ConfigGroup,Channel,gfp_10x,Core,AutoShutter,1
ConfigGroup,Channel,gfp_10x,Core,Shutter,Spectra

# Preset: gfp_20x
ConfigGroup,Channel,gfp_20x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,gfp_20x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,gfp_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Channel,gfp_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,gfp_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,gfp_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,gfp_20x,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,gfp_20x,Shutter-A,State,0
ConfigGroup,Channel,gfp_20x,TIDiaLamp,Intensity,0
ConfigGroup,Channel,gfp_20x,TIDiaLamp,State,0
ConfigGroup,Channel,gfp_20x,TINosePiece,Label,3-S Plan Fluor 20x NA 0.45 Dry
ConfigGroup,Channel,gfp_20x,TIFilterBlock1,Label,3-FITC
ConfigGroup,Channel,gfp_20x,TILightPath,Label,3-Right100
ConfigGroup,Channel,gfp_20x,Spectra,State,1
ConfigGroup,Channel,gfp_20x,Spectra,White_Enable,1
ConfigGroup,Channel,gfp_20x,Spectra,White_Level,100
ConfigGroup,Channel,gfp_20x,Core,AutoShutter,1
ConfigGroup,Channel,gfp_20x,Core,Shutter,Spectra

# Preset: rfp_40x
ConfigGroup,Channel,rfp_40x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,rfp_40x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,rfp_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Channel,rfp_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,rfp_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,rfp_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,rfp_40x,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,rfp_40x,Shutter-A,State,0
ConfigGroup,Channel,rfp_40x,TIDiaLamp,Intensity,0
ConfigGroup,Channel,rfp_40x,TIDiaLamp,State,0
ConfigGroup,Channel,rfp_40x,TINosePiece,Label,4-Plan Fluor 40x NA 0.75 Dry
ConfigGroup,Channel,rfp_40x,TIFilterBlock1,Label,5-TxRed
ConfigGroup,Channel,rfp_40x,TILightPath,Label,3-Right100
ConfigGroup,Channel,rfp_40x,Spectra,State,1
ConfigGroup,Channel,rfp_40x,Spectra,White_Enable,1
ConfigGroup,Channel,rfp_40x,Spectra,White_Level,100
ConfigGroup,Channel,rfp_40x,Core,AutoShutter,1
ConfigGroup,Channel,rfp_40x,Core,Shutter,Spectra


# Preset: tr_10x_20fps
ConfigGroup,Channel,tr_10x_20fps,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,tr_10x_20fps,HamamatsuHam_DCAM,Exposure,50
ConfigGroup,Channel,tr_10x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,Channel,tr_10x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Channel,tr_10x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,Channel,tr_10x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,tr_10x_20fps,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,tr_10x_20fps,Shutter-A,State,1
ConfigGroup,Channel,tr_10x_20fps,TIDiaLamp,Intensity,10
ConfigGroup,Channel,tr_10x_20fps,TIDiaLamp,State,1
ConfigGroup,Channel,tr_10x_20fps,TINosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,Channel,tr_10x_20fps,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Channel,tr_10x_20fps,TILightPath,Label,3-Right100
ConfigGroup,Channel,tr_10x_20fps,Spectra,State,0
ConfigGroup,Channel,tr_10x_20fps,Spectra,White_Enable,0
ConfigGroup,Channel,tr_10x_20fps,Spectra,White_Level,100
ConfigGroup,Channel,tr_10x_20fps,Core,AutoShutter,0
ConfigGroup,Channel,tr_10x_20fps,Core,Shutter,Shutter-A

# Preset: tr_40x_20fps
ConfigGroup,Channel,tr_40x_20fps,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,tr_40x_20fps,HamamatsuHam_DCAM,Exposure,50
ConfigGroup,Channel,tr_40x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,Channel,tr_40x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Channel,tr_40x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,Channel,tr_40x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,tr_40x_20fps,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,tr_40x_20fps,Shutter-A,State,1
ConfigGroup,Channel,tr_40x_20fps,TIDiaLamp,Intensity,10
ConfigGroup,Channel,tr_40x_20fps,TIDiaLamp,State,1
ConfigGroup,Channel,tr_40x_20fps,TINosePiece,Label,4-Plan Fluor 40x NA 0.75 Dry
ConfigGroup,Channel,tr_40x_20fps,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Channel,tr_40x_20fps,TILightPath,Label,3-Right100
ConfigGroup,Channel,tr_40x_20fps,Spectra,State,0
ConfigGroup,Channel,tr_40x_20fps,Spectra,White_Enable,0
ConfigGroup,Channel,tr_40x_20fps,Spectra,White_Level,100
ConfigGroup,Channel,tr_40x_20fps,Core,AutoShutter,0
ConfigGroup,Channel,tr_40x_20fps,Core,Shutter,Shutter-A

# Preset: tr_4x
ConfigGroup,Channel,tr_4x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,tr_4x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,tr_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,Channel,tr_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Channel,tr_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,Channel,tr_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,tr_4x,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,tr_4x,Shutter-A,State,1
ConfigGroup,Channel,tr_4x,TIDiaLamp,Intensity,10
ConfigGroup,Channel,tr_4x,TIDiaLamp,State,1
ConfigGroup,Channel,tr_4x,TINosePiece,Label,1-Plan Fluor 4x NA 0.13 Dry
ConfigGroup,Channel,tr_4x,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Channel,tr_4x,TILightPath,Label,3-Right100
ConfigGroup,Channel,tr_4x,Spectra,State,0
ConfigGroup,Channel,tr_4x,Spectra,White_Enable,0
ConfigGroup,Channel,tr_4x,Spectra,White_Level,100
ConfigGroup,Channel,tr_4x,Core,AutoShutter,0
ConfigGroup,Channel,tr_4x,Core,Shutter,Shutter-A

# Preset: tr_4x_20fps
ConfigGroup,Channel,tr_4x_20fps,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,tr_4x_20fps,HamamatsuHam_DCAM,Exposure,50
ConfigGroup,Channel,tr_4x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,Channel,tr_4x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Channel,tr_4x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,Channel,tr_4x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,tr_4x_20fps,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,tr_4x_20fps,Shutter-A,State,1
ConfigGroup,Channel,tr_4x_20fps,TIDiaLamp,State,1
ConfigGroup,Channel,tr_4x_20fps,TIDiaLamp,Intensity,10
ConfigGroup,Channel,tr_4x_20fps,TINosePiece,Label,1-Plan Fluor 4x NA 0.13 Dry
ConfigGroup,Channel,tr_4x_20fps,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Channel,tr_4x_20fps,TILightPath,Label,3-Right100
ConfigGroup,Channel,tr_4x_20fps,Spectra,State,0
ConfigGroup,Channel,tr_4x_20fps,Spectra,White_Enable,0
ConfigGroup,Channel,tr_4x_20fps,Spectra,White_Level,100
ConfigGroup,Channel,tr_4x_20fps,Core,AutoShutter,0
ConfigGroup,Channel,tr_4x_20fps,Core,Shutter,Shutter-A

# Preset: tr_10x
ConfigGroup,Channel,tr_10x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,tr_10x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,tr_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,Channel,tr_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Channel,tr_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,Channel,tr_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,tr_10x,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,tr_10x,Shutter-A,State,1
ConfigGroup,Channel,tr_10x,TIDiaLamp,Intensity,10
ConfigGroup,Channel,tr_10x,TIDiaLamp,State,1
ConfigGroup,Channel,tr_10x,TINosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,Channel,tr_10x,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Channel,tr_10x,TILightPath,Label,3-Right100
ConfigGroup,Channel,tr_10x,Spectra,State,0
ConfigGroup,Channel,tr_10x,Spectra,White_Enable,0
ConfigGroup,Channel,tr_10x,Spectra,White_Level,100
ConfigGroup,Channel,tr_10x,Core,AutoShutter,1
ConfigGroup,Channel,tr_10x,Core,Shutter,Shutter-A

# Preset: tr_20x
ConfigGroup,Channel,tr_20x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,tr_20x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,tr_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,Channel,tr_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Channel,tr_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,Channel,tr_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,tr_20x,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,tr_20x,Shutter-A,State,1
ConfigGroup,Channel,tr_20x,TIDiaLamp,Intensity,10
ConfigGroup,Channel,tr_20x,TIDiaLamp,State,1
ConfigGroup,Channel,tr_20x,TINosePiece,Label,3-S Plan Fluor 20x NA 0.45 Dry
ConfigGroup,Channel,tr_20x,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Channel,tr_20x,TILightPath,Label,3-Right100
ConfigGroup,Channel,tr_20x,Spectra,State,0
ConfigGroup,Channel,tr_20x,Spectra,White_Enable,0
ConfigGroup,Channel,tr_20x,Spectra,White_Level,100
ConfigGroup,Channel,tr_20x,Core,AutoShutter,1
ConfigGroup,Channel,tr_20x,Core,Shutter,Shutter-A

# Preset: tr_40x
ConfigGroup,Channel,tr_40x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,tr_40x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,tr_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,Channel,tr_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Channel,tr_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,Channel,tr_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,tr_40x,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,tr_40x,Shutter-A,State,1
ConfigGroup,Channel,tr_40x,TIDiaLamp,Intensity,10
ConfigGroup,Channel,tr_40x,TIDiaLamp,State,1
ConfigGroup,Channel,tr_40x,TINosePiece,Label,4-Plan Fluor 40x NA 0.75 Dry
ConfigGroup,Channel,tr_40x,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Channel,tr_40x,TILightPath,Label,3-Right100
ConfigGroup,Channel,tr_40x,Spectra,State,0
ConfigGroup,Channel,tr_40x,Spectra,White_Enable,0
ConfigGroup,Channel,tr_40x,Spectra,White_Level,100
ConfigGroup,Channel,tr_40x,Core,AutoShutter,1
ConfigGroup,Channel,tr_40x,Core,Shutter,Shutter-A

# Preset: tr_40x_100fps
ConfigGroup,Channel,tr_40x_100fps,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,tr_40x_100fps,HamamatsuHam_DCAM,Exposure,10
ConfigGroup,Channel,tr_40x_100fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,Channel,tr_40x_100fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Channel,tr_40x_100fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,Channel,tr_40x_100fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,tr_40x_100fps,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,tr_40x_100fps,Shutter-A,State,1
ConfigGroup,Channel,tr_40x_100fps,TIDiaLamp,Intensity,10
ConfigGroup,Channel,tr_40x_100fps,TIDiaLamp,State,1
ConfigGroup,Channel,tr_40x_100fps,TINosePiece,Label,4-Plan Fluor 40x NA 0.75 Dry
ConfigGroup,Channel,tr_40x_100fps,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Channel,tr_40x_100fps,TILightPath,Label,3-Right100
ConfigGroup,Channel,tr_40x_100fps,Spectra,State,0
ConfigGroup,Channel,tr_40x_100fps,Spectra,White_Enable,0
ConfigGroup,Channel,tr_40x_100fps,Spectra,White_Level,100
ConfigGroup,Channel,tr_40x_100fps,Core,AutoShutter,0
ConfigGroup,Channel,tr_40x_100fps,Core,Shutter,Shutter-A


# Preset: tr_100x_20fps
ConfigGroup,Channel,tr_100x_20fps,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,tr_100x_20fps,HamamatsuHam_DCAM,Exposure,50
ConfigGroup,Channel,tr_100x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,Channel,tr_100x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],HIGH
ConfigGroup,Channel,tr_100x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,Channel,tr_100x_20fps,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,Channel,tr_100x_20fps,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,Channel,tr_100x_20fps,Shutter-A,State,1
ConfigGroup,Channel,tr_100x_20fps,TIDiaLamp,Intensity,10
ConfigGroup,Channel,tr_100x_20fps,TIDiaLamp,State,1
ConfigGroup,Channel,tr_100x_20fps,TINosePiece,Label,5-Plan Apo 100x NA 1.40 Oil
ConfigGroup,Channel,tr_100x_20fps,TIFilterBlock1,Label,5-TxRed
ConfigGroup,Channel,tr_100x_20fps,TILightPath,Label,3-Right100
ConfigGroup,Channel,tr_100x_20fps,Spectra,State,0
ConfigGroup,Channel,tr_100x_20fps,Spectra,White_Enable,0
ConfigGroup,Channel,tr_100x_20fps,Spectra,White_Level,100
ConfigGroup,Channel,tr_100x_20fps,Core,AutoShutter,0
ConfigGroup,Channel,tr_100x_20fps,Core,Shutter,Shutter-A

# Preset: dapi_10x
ConfigGroup,Channel,dapi_10x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,dapi_10x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,dapi_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Channel,dapi_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,dapi_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,dapi_10x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,dapi_10x,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,dapi_10x,Shutter-A,State,0
ConfigGroup,Channel,dapi_10x,TIDiaLamp,Intensity,0
ConfigGroup,Channel,dapi_10x,TIDiaLamp,State,0
ConfigGroup,Channel,dapi_10x,TINosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,Channel,dapi_10x,TIFilterBlock1,Label,1-DAPI
ConfigGroup,Channel,dapi_10x,TILightPath,Label,3-Right100
ConfigGroup,Channel,dapi_10x,Spectra,State,1
ConfigGroup,Channel,dapi_10x,Spectra,White_Enable,1
ConfigGroup,Channel,dapi_10x,Spectra,White_Level,100
ConfigGroup,Channel,dapi_10x,Core,AutoShutter,1
ConfigGroup,Channel,dapi_10x,Core,Shutter,Spectra

# Preset: dapi_20x
ConfigGroup,Channel,dapi_20x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,dapi_20x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,dapi_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Channel,dapi_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,dapi_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,dapi_20x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,dapi_20x,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,dapi_20x,Shutter-A,State,0
ConfigGroup,Channel,dapi_20x,TIDiaLamp,Intensity,0
ConfigGroup,Channel,dapi_20x,TIDiaLamp,State,0
ConfigGroup,Channel,dapi_20x,TINosePiece,Label,3-S Plan Fluor 20x NA 0.45 Dry
ConfigGroup,Channel,dapi_20x,TIFilterBlock1,Label,1-DAPI
ConfigGroup,Channel,dapi_20x,TILightPath,Label,3-Right100
ConfigGroup,Channel,dapi_20x,Spectra,State,1
ConfigGroup,Channel,dapi_20x,Spectra,White_Enable,1
ConfigGroup,Channel,dapi_20x,Spectra,White_Level,100
ConfigGroup,Channel,dapi_20x,Core,AutoShutter,1
ConfigGroup,Channel,dapi_20x,Core,Shutter,Spectra

# Preset: dapi_40x
ConfigGroup,Channel,dapi_40x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,dapi_40x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,dapi_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Channel,dapi_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,dapi_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,dapi_40x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,dapi_40x,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,dapi_40x,Shutter-A,State,0
ConfigGroup,Channel,dapi_40x,TIDiaLamp,Intensity,0
ConfigGroup,Channel,dapi_40x,TIDiaLamp,State,0
ConfigGroup,Channel,dapi_40x,TINosePiece,Label,4-Plan Fluor 40x NA 0.75 Dry
ConfigGroup,Channel,dapi_40x,TIFilterBlock1,Label,1-DAPI
ConfigGroup,Channel,dapi_40x,TILightPath,Label,3-Right100
ConfigGroup,Channel,dapi_40x,Spectra,State,1
ConfigGroup,Channel,dapi_40x,Spectra,White_Enable,1
ConfigGroup,Channel,dapi_40x,Spectra,White_Level,100
ConfigGroup,Channel,dapi_40x,Core,AutoShutter,1
ConfigGroup,Channel,dapi_40x,Core,Shutter,Spectra

# Preset: dapi_4x
ConfigGroup,Channel,dapi_4x,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Channel,dapi_4x,HamamatsuHam_DCAM,Exposure,100
ConfigGroup,Channel,dapi_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,Channel,dapi_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,Channel,dapi_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,Channel,dapi_4x,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,Channel,dapi_4x,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,Channel,dapi_4x,Shutter-A,State,0
ConfigGroup,Channel,dapi_4x,TIDiaLamp,Intensity,0
ConfigGroup,Channel,dapi_4x,TIDiaLamp,State,0
ConfigGroup,Channel,dapi_4x,TINosePiece,Label,1-Plan Fluor 4x NA 0.13 Dry
ConfigGroup,Channel,dapi_4x,TIFilterBlock1,Label,1-DAPI
ConfigGroup,Channel,dapi_4x,TILightPath,Label,3-Right100
ConfigGroup,Channel,dapi_4x,Spectra,State,1
ConfigGroup,Channel,dapi_4x,Spectra,White_Enable,1
ConfigGroup,Channel,dapi_4x,Spectra,White_Level,100
ConfigGroup,Channel,dapi_4x,Core,AutoShutter,1
ConfigGroup,Channel,dapi_4x,Core,Shutter,Spectra


# Group: lamp
# Preset: on
ConfigGroup,lamp,on,TIDiaLamp,Intensity,10
ConfigGroup,lamp,on,TIDiaLamp,State,1

# Preset: off
ConfigGroup,lamp,off,TIDiaLamp,Intensity,0
ConfigGroup,lamp,off,TIDiaLamp,State,0



# PixelSize settings
# Resolution preset: Flash_100X
ConfigPixelSize,Flash_100X,TINosePiece,Label,4-Plan Apo VC 100x NA 1.40 Oil
ConfigPixelSize,Flash_100X,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Flash_100X,0.0654

# Resolution preset: Flash_40X
ConfigPixelSize,Flash_40X,TINosePiece,Label,4-Plan Fluor 40x NA 0.75 Dry
ConfigPixelSize,Flash_40X,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Flash_40X,0.162

# Resolution preset: Flash_10X
ConfigPixelSize,Flash_10X,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
ConfigPixelSize,Flash_10X,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Flash_10X,0.6539

# Resolution preset: Flash_10X_lambda
ConfigPixelSize,Flash_10X_lambda,TINosePiece,Label,6-Plan Apo Lambda 10x NA 0.45 Dry
ConfigPixelSize,Flash_10X_lambda,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Flash_10X_lambda,0.6539

# Resolution preset: Flash_4X
ConfigPixelSize,Flash_4X,TINosePiece,Label,2-Plan Fluor 4x NA 0.13 Dry
ConfigPixelSize,Flash_4X,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Flash_4X,1.616 # +/- 0.0010
