# Generated by Configurator on Tue Sep 30 11:55:05 EDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,COM4,SerialManager,COM4
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,SutterHub,SutterLambda2,SutterHub
Device,Shutter-A,SutterLambda2,Shutter-A
Device,Spectra,LumencorSpectra,Spectra
Device,LudlController,Ludl,LudlController
Device,XYStage,Ludl,XYStage

# Pre-init settings for devices
Property,SutterHub,Port,COM6
Property,Spectra,Port,COM4
Property,Spectra,SetLE_Type,Spectra
Property,LudlController,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,2000.0000
Property,COM5,BaudRate,9600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,11.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,2
Property,COM5,Verbose,1
Property,COM6,AnswerTimeout,2000.0000
Property,COM6,BaudRate,128000
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,Shutter-A,SutterHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Shutter-A
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets

# PixelSize settings

