# Generated by Configurator on Fri Sep 19 15:56:45 EDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM11,SerialManager,COM11
Device,COM7,SerialManager,COM7
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,SutterHub,SutterLambda2,SutterHub
Device,Shutter-A,SutterLambda2,Shutter-A
Device,TIScope,NikonTI,TIScope
Device,TIDiaLamp,NikonTI,TIDiaLamp
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,Spectra,LumencorSpectra,Spectra
Device,LudlController,Ludl,LudlController
Device,XYStage,Ludl,XYStage

# Pre-init settings for devices
Property,SutterHub,Port,COM7
Property,Spectra,Port,COM5
Property,Spectra,SetLE_Type,Spectra
Property,LudlController,Port,COM11

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM11,AnswerTimeout,2000.0000
Property,COM11,BaudRate,9600
Property,COM11,DTR,Disable
Property,COM11,DataBits,8
Property,COM11,DelayBetweenCharsMs,11.0000
Property,COM11,Fast USB to Serial,Disable
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,2
Property,COM11,Verbose,1
Property,COM7,AnswerTimeout,2000.0000
Property,COM7,BaudRate,128000
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1

# Hub (parent) references
Parent,Shutter-A,SutterHub
Parent,TIDiaLamp,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Shutter-A
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,3,4-Plan Fluor 40x NA 0.75 Dry
Label,TINosePiece,2,3-S Plan Fluor 20x NA 0.45 Dry
Label,TINosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,TINosePiece,0,1-Plan Fluor 4x NA 0.13 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-Cy5
Label,TIFilterBlock1,4,5-TxRed
Label,TIFilterBlock1,3,4-YFPHQ
Label,TIFilterBlock1,2,3-FITC
Label,TIFilterBlock1,1,2-CFPHQ
Label,TIFilterBlock1,0,1-DAPI
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Acquisition
# Preset: phase_YFP_20X
ConfigGroup,Acquisition,phase_YFP_20X,TIDiaLamp,State,1
ConfigGroup,Acquisition,phase_YFP_20X,TIDiaLamp,Intensity,10
ConfigGroup,Acquisition,phase_YFP_20X,Core,Shutter,TIDiaLamp
ConfigGroup,Acquisition,phase_YFP_20X,Core,AutoShutter,0
ConfigGroup,Acquisition,phase_YFP_20X,Shutter,State,1
ConfigGroup,Acquisition,phase_YFP_20X,TILightPath,Label,3-Right100
ConfigGroup,Acquisition,phase_YFP_20X,TINosePiece,Label,3-S Plan Fluor 20x NA 0.45 Dry
ConfigGroup,Acquisition,phase_YFP_20X,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Acquisition,phase_YFP_20X,Spectra,State,0
ConfigGroup,Acquisition,phase_YFP_20X,HamamatsuHam_DCAM,Exposure,100




# PixelSize settings

